#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#                                                                 #
#  D E F I N I T I O N   O F   Y O U R   A C Q U I S I T I O N    #
#  D I G I T I Z E R   &   C O I N C I D E N C E   S H O R T E R  #
#                                                                 #
#-------------------oooooOOOOO00000OOOOOooooo---------------------#

#	   A D D E R
/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert adder


#      E N E R G Y   B L U R R I N G
/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert                              energyResolution
/gate/digitizerMgr/active/SinglesDigitizer/Singles/energyResolution/fwhm              0.20
/gate/digitizerMgr/active/SinglesDigitizer/Singles/energyResolution/energyOfReference       511. keV

/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert pileup
/gate/digitizerMgr/active/SinglesDigitizer/Singles/pileup/setDepth 4
/gate/digitizerMgr/active/SinglesDigitizer/Singles/pileup/setPileup  300 ns

#      T I M E      R E S O L U T I O N 
#/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert                              timeResolution
#/gate/digitizerMgr/active/SinglesDigitizer/Singles/timeResolution/fwhm    16 ns


#/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert spatialResolution
#/gate/digitizerMgr/active/SinglesDigitizer/Singles/spatialResolution/fwhm 5.0 mm

#/gate/digitizerMgr/active/SinglesDigitizer/Singles/spatialResolution/confineInsideOfSmallestElement true
#/gate/digitizerMgr/active/SinglesDigitizer/Singles/spatialResolution/verbose 1


#       E N E R G Y   C U T
/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert                              energyFraming
/gate/digitizerMgr/active/SinglesDigitizer/Singles/energyFraming/setMin            200 keV
/gate/digitizerMgr/active/SinglesDigitizer/Singles/energyFraming/setMax                  1200 keV


#       D E A D    T I M E 
/gate/digitizerMgr/active/SinglesDigitizer/Singles/insert                              deadtime
/gate/digitizerMgr/active/SinglesDigitizer/Singles/deadtime/setDeadTime                1.2  us
/gate/digitizerMgr/active/SinglesDigitizer/Singles/deadtime/setMode                    paralysable
/gate/digitizerMgr/active/SinglesDigitizer/Singles/deadtime/chooseDTVolume             crystal



#       E N E R G Y     W I N D O W
/gate/digitizerMgr/name                                EWindow
/gate/digitizerMgr/chooseSD active
/gate/digitizerMgr/insert                              SinglesDigitizer
/gate/digitizerMgr/active/SinglesDigitizer/EWindow/setInputCollection                Singles
/gate/digitizerMgr/active/SinglesDigitizer/EWindow/insert                      energyFraming
# 50 % energy window
/gate/digitizerMgr/active/SinglesDigitizer/EWindow/energyFraming/setMin    380 keV
/gate/digitizerMgr/active/SinglesDigitizer/EWindow/energyFraming/setMax          640 keV


#	    C O I N C I D E N C E    S O R T E R 
/gate/digitizerMgr/CoincidenceSorter/Coincidences/setInputCollection           EWindow
/gate/digitizerMgr/CoincidenceSorter/Coincidences/setWindow              15 ns
/gate/digitizerMgr/CoincidenceSorter/Coincidences/minSectorDifference    1
#/gate/digitizerMgr/CoincidenceSorter/Coincidences/describe
/gate/digitizerMgr/CoincidenceSorter/Coincidences/MultiplesPolicy takeWinnerOfGoods

#/gate/digitizerMgr/name                                delay
#/gate/digitizerMgr/chooseSD active
#/gate/digitizerMgr/insert                              CoincidenceSorter
#/gate/digitizerMgr/active/SinglesDigitizer/delay/setInputCollection                  EWindow
#/gate/digitizerMgr/active/SinglesDigitizer/delay/setWindow                     15. ns
#/gate/digitizerMgr/active/SinglesDigitizer/delay/setOffset                     500. ns
#/gate/digitizerMgr/active/SinglesDigitizer/delay/minSectorDifference    1
#/gate/digitizerMgr/active/SinglesDigitizer/delay/describe
#/gate/digitizerMgr/active/SinglesDigitizer/delay/MultiplesPolicy takeWinnerOfGoods

#/gate/digitizerMgr/name                                	finalCoinc
#/gate/digitizerMgr/chooseSD active
#/gate/digitizerMgr/insert                              	coincidenceChain
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/addInputName             	delay
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/addInputName             	Coincidences
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/describe
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/usePriority              	false
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/insert deadtime
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/deadtime/setDeadTime		1.15 us
#/gate/digitizerMgr/active/SinglesDigitizer/finalCoinc/deadtime/setMode nonparalysable


