/gate/source/addSource twogamma
#/gate/source/twogamma/setActivity 5000 becquerel
/gate/source/twogamma/setActivity 50000 becquerel
/gate/source/twogamma/setType backtoback
/gate/source/twogamma/gps/particle gamma
/gate/source/twogamma/gps/energytype Mono
/gate/source/twogamma/gps/monoenergy 0.511 MeV
/gate/source/twogamma/gps/type Point

/gate/source/twogamma/gps/angtype iso
/gate/source/twogamma/gps/mintheta 90 deg  # 90
/gate/source/twogamma/gps/maxtheta 90 deg   # 90
/gate/source/twogamma/gps/minphi 0. deg 
/gate/source/twogamma/gps/maxphi 180. deg

/gate/source/twogamma/gps/centre  0. 0. 0.0 cm



/gate/source/list
