
/control/execute mac/verbose.mac
#/control/execute mac/visu.mac

# GEOMETRY
/gate/geometry/setMaterialDatabase data/GateMaterials_pet.db
/control/execute mac/pet_geometry.mac
/control/execute mac/table_geometry.mac
/control/execute mac/phantom_NECR.mac
/control/execute mac/pet_digitizer.mac

# used to compute scatter counts
/gate/phantom/attachPhantomSD
/gate/cylinderScat/attachPhantomSD
/gate/linearSourceIn/attachPhantomSD
/gate/linearSourceOut/attachPhantomSD

# PHYSICS
/control/execute mac/physics.mac

# OUTPUT
/control/execute mac/pet_output.mac

# INITIALISATION
/gate/run/initialize

# SOURCE
/control/execute mac/source_NECR.mac

# START
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto
/gate/application/setTimeStart 0 s
/gate/application/setTimeSlice 0.00015 s
/gate/application/setTimeStop  0.00015 s
/gate/application/startDAQ

# computation time estimation (2021)
# PPS = 3000
# with 1.78 GBq, 0.0001 s -> around 1 min, around 1300 prompts
